//
//
// AUTHOR :  John Davidson
//           Bioengineering Institute
//           The University of Auckland
// creator: Given John; Family Davidson; Other B; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; j.davidson@auckland.ac.nz
// title: A mathematical model of fatigue in skeletal muscle force contraction: slow-twitch muscle
// publisher: The University of Auckland, Auckland Bioengineering Institute
// modification: Removed some variables which were defined as constants but which were not used anywhere else in the model.; W3CDTF 2008-05-26T13:00:58+12:00; Given Catherine; Family Lloyd; Other May
// modification: Fixed units such that the model now runs in JSim without any need for automated unit correction.; W3CDTF 2008-06-16T09:33:31+12:00; Given John; Family Davidson; Other B
// comment: This cellML model is known to run in PCEnv (0.4), COR and JSim to recreate the published results. The units have been checked and they are consistent in as much as they are known to be equivalent. This particular version of the CellML model represents slow twitch muscle.; FN Catherine Lloyd
// created: W3CDTF 2008-05-26T00:00:00+00:00
// simulation: maximumStepSize 0.1; endingValue 1000
// reference: _1 excitation-contraction coupling; subject_type keyword
// reference: Pubmed_id 18080210; Given Paul; Family Shorten; Other R; Given Paul; Family O'Callaghan; Given John; Family Davidson; Other B; Given Tanya; Family Soboleva; Other K; title A mathematical model of fatigue in skeletal muscle force contraction; volume 28; first_page 293; W3CDTF 2007-00-00 00:00; last_page 313; title Journal of Muscle Research and Cell Motility
def model Slow_Twitch as
  // A mathematical model of fatigue in skeletal muscle force contraction
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This cellML model is known to run in OpenCell, JSim and COR to recreate the published results. The units have been checked in COR and they are consistent in as much as they are known to be equivalent. This particular version of the CellML model represents slow twitch muscle.
  //
  // Model Structure
  //
  // Abstract: The ability for muscle to repeatedly generate force is limited by fatigue. The cellular mechanisms behind muscle fatigue are complex and potentially include breakdown at many points along the excitation
  //
  // model diagram
  //
  // Schematic diagram of the muscle membrane electrophysiological model. There are descriptions of K+, Cl- and Na+ transport in the sarcolemma and t-tubules membranes. The model includes descriptions of an inward rectifier K+ current (IIR), a delayed rectifier K+ current (IDR), a Na+ current (INa), a Na+/K+ pump (INaK) and a Cl- current (ICl). Currents in the t-tubules are denoted by a subscript t.
  //
  // model diagram
  //
  // Schematic diagram of the Ca2+ dynamics model. Ca2+ binds to parvalbumin and ATP myoplasmic buffers, is transported and buffered to calsequestrin in the SR and bind to tropinin to generate force.
  //
  // model diagram
  //
  // Schematic diagram of the crossbridge dynamics model. Two Ca2+ ions must bind to the troponin-tropomyosin regulatory unit (RU) to permit crossbridge cycling (XB) kinetics. Open circles denote Ca2+ binding sites, the black circles represent the number of Ca2+ ions bound to troponin and the black bar represents the tropomyosin block.
  //
  // model diagram
  //
  // Schematic diagram of the phosphate dynamics model. Phosphate is generated during crossbridge cycling and SR Ca2+ pumping, feeds back to slow crossbridge cycling and is transported into the SR to precipitate with Ca2+ and reduce Ca2+ release from the SR.
  //
  // The complete original paper reference is cited below:
  //
  // A mathematical model of fatigue in skeletal muscle force contraction, Paul R. Shorten, Paul OJournal of Muscle Research and Cell Motility, 28, 293-313. PubMed ID: 18080210 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=18080210&query_hl=1&itool=pubmed_docsum)
  // units definition
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microA_per_cm2 as
    unit ampere {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit ohm_cm2 as
    unit ohm;
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit centi_metre as
    unit metre {pref: centi};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit per_millisecond_per_millivolt as
    unit second {expo: -1, pref: milli};
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit milliJ_per_degreeK_per_mol as
    unit joule {pref: milli};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit degreeK as
    unit kelvin;
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  // <units name="milliM2">
  //   <unit prefix="micro" units="mole" exponent="2"/>
  //   <unit units="litre" exponent="-2" />
  // </units>
  def unit micro_mol_per_cm2_per_second as
    unit mole {pref: micro};
    unit metre {expo: -2, pref: centi};
    unit second {expo: -1};
  enddef;
  // Stern and Rios units
  def unit micrometre3_per_millisecond as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_micromolar2_per_millisecond as
    unit mole {expo: -2, pref: micro};
    unit litre {expo: 2};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_micromolar_per_millisecond as
    unit mole {expo: -1, pref: micro};
    unit litre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  //
  // Razumova units
  def unit micromolar_per_millisecond_micrometre3 as
    unit mole {pref: micro};
    unit litre {expo: -1};
    unit second {expo: -1, pref: milli};
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit milliV_milliM as
    unit volt {pref: milli};
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM2 as
    unit mole {expo: 2, pref: milli};
    unit litre {expo: -2};
  enddef;
  def unit per_milliM3_per_millisecond as
    unit mole {expo: -3, pref: milli};
    unit litre {expo: 3};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_milliM2_per_millisecond as
    unit mole {expo: -2, pref: milli};
    unit litre {expo: 2};
    unit second {expo: -1, pref: milli};
  enddef;
  //
  // tomo
  def unit newton_per_m3 as
    unit newton;
    unit metre {expo: -3};
  enddef;
  def unit newton_per_m2 as
    unit newton;
    unit metre {expo: -2};
  enddef;
  def unit newton_millisecond_per_m2 as
    unit newton;
    unit second {pref: milli};
    unit metre {expo: -2};
  enddef;
  def unit micrometre_per_millisecond as
    unit metre {pref: micro};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_micrometre4 as
    unit metre {expo: -4, pref: micro};
  enddef;
  def unit per_micrometre3 as
    unit metre {expo: -3, pref: micro};
  enddef;
  def unit per_micrometre2 as
    unit metre {expo: -2, pref: micro};
  enddef;
  def unit per_micrometre as
    unit metre {expo: -1, pref: micro};
  enddef;
  //
  // tomo  end
  // components

  def comp cell as
    var time: millisecond {pub: out};
  enddef;

  def comp wal_environment as
    var C_m: microF_per_cm2 {init: 0.58};
    var gam: dimensionless {init: 2.79};
    var R_a: ohm_cm2 {init: 150};
    var tsi: centi_metre {init: 0.000001};
    var tsi2: centi_metre {init: 0.0025};
    var tsi3: centi_metre {init: 0.0005};
    var FF: C_per_mol {init: 96485, priv: out};
    var tau_K: millisecond {init: 559};
    var tau_Na: millisecond {init: 559};
    var f_T: dimensionless {init: 0.00174};
    var tau_K2: millisecond {init: 40229.885};
    var tau_Na2: millisecond {init: 40229.885};
    var I_K_rest: microA_per_cm2 {init: 0.34};
    var I_Na_rest: microA_per_cm2 {init: -0.43};
    var alpha_h_bar: per_millisecond {init: 0.0081, priv: out};
    var alpha_m_bar: per_millisecond_per_millivolt {init: 0.288, priv: out};
    var alpha_n_bar: per_millisecond_per_millivolt {init: 0.0131, priv: out};
    var beta_h_bar: per_millisecond {init: 4.38, priv: out};
    var beta_m_bar: per_millisecond {init: 1.38, priv: out};
    var beta_n_bar: per_millisecond {init: 0.067, priv: out};
    var V_m: millivolt {init: -46, priv: out};
    var V_n: millivolt {init: -40, priv: out};
    var V_h: millivolt {init: -45, priv: out};
    var V_a: millivolt {init: 70, priv: out};
    var V_S_inf: millivolt {init: -68, priv: out};
    var V_h_K_inf: millivolt {init: -40, priv: out};
    var A_a: millivolt {init: 150, priv: out};
    var A_S_inf: millivolt {init: 7.1, priv: out};
    var A_h_K_inf: millivolt {init: 7.5, priv: out};
    var K_alpha_h: millivolt {init: 14.7, priv: out};
    var K_beta_h: millivolt {init: 9, priv: out};
    var K_alpha_m: millivolt {init: 10, priv: out};
    var K_alpha_n: millivolt {init: 7, priv: out};
    var K_beta_m: millivolt {init: 18, priv: out};
    var K_beta_n: millivolt {init: 40, priv: out};
    var RR: milliJ_per_degreeK_per_mol {init: 8314.41, priv: out};
    var TT: degreeK {init: 293, priv: out};
    var g_Cl_bar: milliS_per_cm2 {init: 3.275, priv: out};
    var g_K_bar: milliS_per_cm2 {init: 10.8, priv: out};
    var g_Na_bar: milliS_per_cm2 {init: 134, priv: out};
    var G_K: milliS_per_cm2 {init: 1.85, priv: out};
    var del: dimensionless {init: 0.4, priv: out};
    var K_K: milliM2 {init: 950, priv: out};
    var K_S: milliM2 {init: 1, priv: out};
    var K_m_K: milliM {init: 1, priv: out};
    var K_m_Na: milliM {init: 13, priv: out};
    var S_i: milliM {init: 10, priv: out};
    var J_NaK_bar: micro_mol_per_cm2_per_second {init: 0.0001656, priv: out};
    var V_tau: millivolt {init: 70, priv: out};
    var I_T: microA_per_cm2 {priv: out};
    var vS: millivolt {init: -82.265452, priv: out, pub: out};
    var vT: millivolt {init: -82.205709, priv: out, pub: out};
    var I_ionic_s: microA_per_cm2;
    var I_ionic_t: microA_per_cm2;
    var K_t: milliM {init: 6.137539, priv: out};
    var K_i: milliM {init: 150.901412, priv: out};
    var K_e: milliM {init: 5.891642, priv: out};
    var Na_i: milliM {init: 12.699134, priv: out};
    var Na_t: milliM {init: 132.186003, priv: out};
    var Na_e: milliM {init: 133.009207, priv: out};
    var E_K: millivolt {priv: out};
    var E_K_t: millivolt {priv: out};
    var Cl_i: milliM {priv: out};
    var Cl_o: milliM {priv: out};
    var Cl_i_t: milliM {priv: out};
    var Cl_o_t: milliM {priv: out};
    var J_K: milliV_milliM {priv: out};
    var J_K_t: milliV_milliM {priv: out};
    var eta_Cl: dimensionless {init: 0.1, priv: out};
    var eta_IR: dimensionless {init: 1.0, priv: out};
    var eta_DR: dimensionless {init: 0.45, priv: out};
    var eta_Na: dimensionless {init: 0.1, priv: out};
    var eta_NaK: dimensionless {init: 0.1, priv: out};
    var I_Cl: microA_per_cm2 {priv: in};
    var I_IR: microA_per_cm2 {priv: in};
    var I_DR: microA_per_cm2 {priv: in};
    var I_Na: microA_per_cm2 {priv: in};
    var I_NaK: microA_per_cm2 {priv: in};
    var I_Cl_t: microA_per_cm2 {priv: in};
    var I_IR_t: microA_per_cm2 {priv: in};
    var I_DR_t: microA_per_cm2 {priv: in};
    var I_Na_t: microA_per_cm2 {priv: in};
    var I_NaK_t: microA_per_cm2 {priv: in};
    // tomo
    //  <variable name="I_HH" private_interface="out" units="microA_per_cm2"/>
    var I_HH: microA_per_cm2 {init: 0.0, priv: out};
    var time: millisecond {priv: out, pub: in};
    // unit fix 5_08
    I_T = 1000{millivolt}/1{volt}*((vS-vT)/R_a);
    ode(vS, time) = -((I_ionic_s+I_T)/C_m);
    ode(vT, time) = -((I_ionic_t-I_T/gam)/C_m);
    I_ionic_s = I_Cl+I_IR+I_DR+I_Na+I_NaK+(-I_HH);
    I_ionic_t = I_Cl_t+I_IR_t+I_DR_t+I_Na_t+I_NaK_t;
    ode(K_i, time) = -f_T*((I_IR_t+I_DR_t+I_K_rest+(-2{dimensionless}*I_NaK_t))/(1000{milliM}/1{M}*FF*tsi))-(I_IR+I_DR+I_K_rest+(-2{dimensionless}*I_NaK))/(1000{milliM}/1{M}*FF*tsi2);
    ode(K_t, time) = (I_IR_t+I_DR_t+I_K_rest+(-2{dimensionless}*I_NaK_t))/(1000{milliM}/1{M}*FF*tsi)-(K_t-K_e)/tau_K;
    ode(K_e, time) = (I_IR+I_DR+I_K_rest+(-2{dimensionless}*I_NaK))/(1000{milliM}/1{M}*FF*tsi3)+(K_t-K_e)/tau_K2;
    ode(Na_i, time) = -f_T*((I_Na_t+I_Na_rest+3{dimensionless}*I_NaK_t)/(1000{milliM}/1{M}*FF*tsi))-(I_Na+I_Na_rest+3{dimensionless}*I_NaK)/(1000{milliM}/1{M}*FF*tsi2);
    ode(Na_t, time) = (I_Na_t+I_Na_rest+3{dimensionless}*I_NaK_t)/(1000{milliM}/1{M}*FF*tsi)-(Na_t-Na_e)/tau_Na;
    ode(Na_e, time) = (I_Na+I_Na_rest+3{dimensionless}*I_NaK)/(1000{milliM}/1{M}*FF*tsi3)+(Na_t-Na_e)/tau_Na2;
    E_K = RR*TT/FF*ln(K_e/K_i);
    E_K_t = RR*TT/FF*ln(K_t/K_i);
    Cl_i = 156.5{milliM}/(5{dimensionless}+exp(-FF*E_K/(RR*TT)));
    Cl_o = 156.5{milliM}-5{dimensionless}*Cl_i;
    Cl_i_t = 156.5{milliM}/(5{dimensionless}+exp(-FF*E_K_t/(RR*TT)));
    Cl_o_t = 156.5{milliM}-5{dimensionless}*Cl_i_t;
    J_K = vS*((K_i-K_e*exp(-1{dimensionless}*FF*vS/(RR*TT)))/(1{dimensionless}-exp(-1{dimensionless}*FF*vS/(RR*TT))));
    J_K_t = vT*((K_i-K_t*exp(-1{dimensionless}*FF*vT/(RR*TT)))/(1{dimensionless}-exp(-1{dimensionless}*FF*vT/(RR*TT))));
    //  tomo
    //
    // <math xmlns="http://www.w3.org/1998/Math/MathML">
    // <apply id="I_HH_Eqn">
    //         <eq/>
    //
    //   <ci> I_HH </ci>
    //
    //   <piecewise>
    //
    //     <piece>
    //
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //
    //       <apply>
    //               <and/>
    //
    // 	<apply>
    //                 <geq/>
    //
    // 	  <ci> time </ci>
    //
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 0 </cn>
    //
    // 	</apply>
    //
    // 	<apply>
    //                 <lt/>
    //
    // 	  <ci> time </ci>
    //
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 0.5 </cn>
    //
    // 	</apply>
    //
    //       </apply>
    //
    //     </piece>
    //
    //     <otherwise>
    //
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 0 </cn>
    //
    //     </otherwise>
    //
    //   </piecewise>
    //
    // </apply>
    //
    // </math>
    // <math xmlns="http://www.w3.org/1998/Math/MathML">
    // <apply id="I_HH_Eqn">
    //         <eq/>
    //
    //   <ci> I_HH </ci>
    //
    //   <piecewise>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">   0.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">   0.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  10.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  10.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  20.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  20.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  30.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  30.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  40.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  40.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  50.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  50.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  60.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  60.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  70.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  70.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  80.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  80.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  90.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">  90.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 100.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 100.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 110.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 110.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 120.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 120.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 130.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 130.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 140.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 140.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 150.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 150.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 160.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 160.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 170.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 170.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 180.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 180.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 190.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 190.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 200.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 200.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 210.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 210.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 220.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 220.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 230.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 230.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 240.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 240.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 250.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 250.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 260.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 260.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 270.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 270.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 280.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 280.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 290.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 290.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 300.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 300.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 310.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 310.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 320.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 320.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 330.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 330.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 340.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 340.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 350.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 350.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 360.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 360.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 370.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 370.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 380.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 380.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 390.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 390.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 400.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 400.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 410.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 410.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 420.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 420.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 430.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 430.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 440.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 440.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 450.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 450.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 460.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 460.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 470.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 470.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 480.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 480.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 490.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 490.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 500.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 500.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 510.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 510.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 520.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 520.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 530.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 530.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 540.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 540.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 550.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 550.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 560.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 560.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 570.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 570.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 580.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 580.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 590.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 590.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 600.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 600.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 610.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 610.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 620.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 620.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 630.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 630.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 640.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 640.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 650.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 650.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 660.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 660.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 670.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 670.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 680.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 680.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 690.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 690.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 700.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 700.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 710.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 710.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 720.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 720.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 730.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 730.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 740.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 740.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 750.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 750.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 760.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 760.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 770.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 770.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 780.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 780.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 790.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 790.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 800.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 800.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 810.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 810.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 820.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 820.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 830.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 830.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 840.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 840.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 850.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 850.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 860.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 860.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 870.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 870.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 880.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 880.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 890.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 890.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 900.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 900.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 910.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 910.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 920.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 920.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 930.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 930.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 940.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 940.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 950.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 950.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 960.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 960.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 970.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 970.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 980.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 980.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //   <piece>
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 150 </cn>
    //       <apply>
    //               <and/>
    // 	<apply>
    //                 <geq/>
    //   <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 990.0 </cn>
    // 	</apply>
    // 	<apply>
    //                 <lt/>
    // 	  <ci> time </ci>
    // 	  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond"> 990.5 </cn>
    // 	</apply>
    //       </apply>
    //     </piece>
    //
    //
    //     <otherwise>
    //
    //       <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_cm2"> 0 </cn>
    //
    //     </otherwise>
    //
    //   </piecewise>
    //
    // </apply>
    //
    // </math>
  enddef;

  def comp sarco_Cl_channel as
    var a: dimensionless;
    var vS: millivolt {pub: in};
    var V_a: millivolt {pub: in};
    var A_a: millivolt {pub: in};
    var J_Cl: milliV_milliM;
    var Cl_i: milliM {pub: in};
    var Cl_o: milliM {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var g_Cl_bar: milliS_per_cm2 {pub: in};
    var g_Cl: milliS_per_cm2;
    var I_Cl: microA_per_cm2 {pub: out};
    var time: millisecond {pub: in};
    a = 1{dimensionless}/(1{dimensionless}+exp((vS-V_a)/A_a));
    J_Cl = vS*((Cl_i-Cl_o*exp(FF*vS/(RR*TT)))/(1{dimensionless}-exp(FF*vS/(RR*TT))));
    g_Cl = g_Cl_bar*pow(a, 4{dimensionless});
    I_Cl = g_Cl*(J_Cl/45{milliM});
  enddef;

  def comp sarco_IR_channel as
    var K_R: milliM;
    var K_e: milliM {pub: in};
    var del: dimensionless {pub: in};
    var E_K: millivolt {pub: in};
    var vS: millivolt {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var g_IR_bar: milliS_per_cm2;
    var G_K: milliS_per_cm2 {pub: in};
    var K_K: milliM2 {pub: in};
    var y: dimensionless;
    var K_S: milliM2 {pub: in};
    var S_i: milliM {pub: in};
    var g_IR: milliS_per_cm2;
    var I_IR: microA_per_cm2 {pub: out};
    var J_K: milliV_milliM {pub: in};
    var time: millisecond {priv: out, pub: in};
    K_R = K_e*exp(-del*E_K*(FF/(RR*TT)));
    g_IR_bar = G_K*(sqr(K_R)/(K_K+sqr(K_R)));
    y = 1{dimensionless}-pow(1{dimensionless}+K_S*(1{dimensionless}+sqr(K_R)/K_K)/(sqr(S_i)*exp(2{dimensionless}*(1{dimensionless}-del)*vS*FF/(RR*TT))), -1{dimensionless});
    g_IR = g_IR_bar*y;
    I_IR = g_IR*sel(case J_K > 0{milliV_milliM}: 1{dimensionless}, otherwise: 0{dimensionless})*(J_K/50{milliM});
  enddef;

  def comp sarco_DR_channel as
    var alpha_n: per_millisecond;
    var alpha_n_bar: per_millisecond_per_millivolt {pub: in};
    var V_n: millivolt {pub: in};
    var K_alpha_n: millivolt {pub: in};
    var beta_n: per_millisecond;
    var beta_n_bar: per_millisecond {pub: in};
    var K_beta_n: millivolt {pub: in};
    var h_K_inf: dimensionless;
    var V_h_K_inf: millivolt {pub: in};
    var A_h_K_inf: millivolt {pub: in};
    var tau_h_K: millisecond;
    var n: dimensionless {init: 0.006824};
    var h_K: dimensionless {init: 0.995321};
    var g_DR: milliS_per_cm2;
    var g_K_bar: milliS_per_cm2 {pub: in};
    var I_DR: microA_per_cm2 {pub: out};
    var J_K: milliV_milliM {pub: in};
    var time: millisecond {pub: in};
    var vS: millivolt {pub: in};
    alpha_n = alpha_n_bar*((vS-V_n)/(1{dimensionless}-exp(-((vS-V_n)/K_alpha_n))));
    beta_n = beta_n_bar*exp(-((vS-V_n)/K_beta_n));
    h_K_inf = 1{dimensionless}/(1{dimensionless}+exp((vS-V_h_K_inf)/A_h_K_inf));
    tau_h_K = 1000{millisecond}*exp(-((vS+40{millivolt})/25.75{millivolt}));
    ode(n, time) = alpha_n*(1{dimensionless}-n)-beta_n*n;
    ode(h_K, time) = (h_K_inf-h_K)/tau_h_K;
    g_DR = g_K_bar*pow(n, 4{dimensionless})*h_K;
    I_DR = g_DR*(J_K/50{milliM});
  enddef;

  def comp sarco_Na_channel as
    var vS: millivolt {pub: in};
    var Na_i: milliM {pub: in};
    var Na_e: milliM {pub: in};
    var alpha_h: per_millisecond;
    var alpha_h_bar: per_millisecond {pub: in};
    var V_h: millivolt {pub: in};
    var K_alpha_h: millivolt {pub: in};
    var beta_h: per_millisecond;
    var beta_h_bar: per_millisecond {pub: in};
    var K_beta_h: millivolt {pub: in};
    var alpha_m: per_millisecond;
    var alpha_m_bar: per_millisecond_per_millivolt {pub: in};
    var V_m: millivolt {pub: in};
    var K_alpha_m: millivolt {pub: in};
    var beta_m: per_millisecond;
    var beta_m_bar: per_millisecond {pub: in};
    var K_beta_m: millivolt {pub: in};
    var S_inf: dimensionless;
    var V_S_inf: millivolt {pub: in};
    var A_S_inf: millivolt {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var tau_S: millisecond;
    var V_tau: millivolt {pub: in};
    var m: dimensionless {init: 0.026848};
    var h: dimensionless {init: 0.598402};
    var S: dimensionless {init: 0.586035};
    var g_Na: milliS_per_cm2;
    var g_Na_bar: milliS_per_cm2 {pub: in};
    var J_Na: milliV_milliM;
    var I_Na: microA_per_cm2 {pub: out};
    var time: millisecond {pub: in};
    alpha_h = alpha_h_bar*exp(-((vS-V_h)/K_alpha_h));
    beta_h = beta_h_bar/(1{dimensionless}+exp(-((vS-V_h)/K_beta_h)));
    alpha_m = alpha_m_bar*((vS-V_m)/(1{dimensionless}-exp(-((vS-V_m)/K_alpha_m))));
    beta_m = beta_m_bar*exp(-((vS-V_m)/K_beta_m));
    S_inf = 1{dimensionless}/(1{dimensionless}+exp((vS-V_S_inf)/A_S_inf));
    // factor of 1000 added on 25/6/07
    tau_S = 8571{millisecond}/(0.2{dimensionless}+5.65{dimensionless}*sqr((vS+V_tau)/100{millivolt}));
    J_Na = vS*((Na_i-Na_e*exp(-1{dimensionless}*FF*vS/(RR*TT)))/(1{dimensionless}-exp(-1{dimensionless}*FF*vS/(RR*TT))));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
    ode(S, time) = (S_inf-S)/tau_S;
    g_Na = g_Na_bar*pow(m, 3{dimensionless})*h*S;
    I_Na = g_Na*(J_Na/75{milliM});
  enddef;

  def comp sarco_NaK_channel as
    var sig: dimensionless;
    var f1: dimensionless;
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var I_NaK_bar: microA_per_cm2;
    var K_m_K: milliM {pub: in};
    var K_m_Na: milliM {pub: in};
    var I_NaK: microA_per_cm2 {pub: out};
    var J_NaK_bar: micro_mol_per_cm2_per_second {pub: in};
    var K_e: milliM {pub: in};
    var Na_i: milliM {pub: in};
    var Na_e: milliM {pub: in};
    var time: millisecond {pub: in};
    var vS: millivolt {pub: in};
    sig = 1{dimensionless}/7{dimensionless}*(exp(Na_e/67.3{milliM})-1{dimensionless});
    f1 = pow(1{dimensionless}+0.12{dimensionless}*exp(-0.1{dimensionless}*vS*(FF/(RR*TT)))+0.04{dimensionless}*sig*exp(-(vS*(FF/(RR*TT)))), -1{dimensionless});
    I_NaK_bar = FF*(J_NaK_bar/(sqr(1{dimensionless}+K_m_K/K_e)*pow(1{dimensionless}+K_m_Na/Na_i, 3{dimensionless})));
    I_NaK = I_NaK_bar*f1;
  enddef;

  def comp t_Cl_channel as
    var a_t: dimensionless;
    var vT: millivolt {pub: in};
    var V_a: millivolt {pub: in};
    var A_a: millivolt {pub: in};
    var J_Cl_t: milliV_milliM;
    var Cl_i_t: milliM {pub: in};
    var Cl_o_t: milliM {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var g_Cl_bar: milliS_per_cm2 {pub: in};
    var I_Cl_t: microA_per_cm2 {pub: out};
    var g_Cl_t: milliS_per_cm2;
    var eta_Cl: dimensionless {pub: in};
    var time: millisecond {priv: out, pub: in};
    a_t = 1{dimensionless}/(1{dimensionless}+exp((vT-V_a)/A_a));
    J_Cl_t = vT*((Cl_i_t-Cl_o_t*exp(FF*vT/(RR*TT)))/(1{dimensionless}-exp(FF*vT/(RR*TT))));
    g_Cl_t = g_Cl_bar*pow(a_t, 4{dimensionless});
    I_Cl_t = eta_Cl*g_Cl_t*(J_Cl_t/45{milliM});
  enddef;

  def comp t_IR_channel as
    var K_R_t: milliM;
    var K_t: milliM {pub: in};
    var del: dimensionless {pub: in};
    var E_K_t: millivolt {pub: in};
    var vT: millivolt {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var g_IR_bar_t: milliS_per_cm2;
    var G_K: milliS_per_cm2 {pub: in};
    var K_K: milliM2 {pub: in};
    var y_t: dimensionless;
    var K_S: milliM2 {pub: in};
    var S_i: milliM {pub: in};
    var g_IR_t: milliS_per_cm2;
    var I_IR_t: microA_per_cm2 {pub: out};
    var J_K_t: milliV_milliM {pub: in};
    var eta_IR: dimensionless {pub: in};
    var time: millisecond {priv: out, pub: in};
    K_R_t = K_t*exp(-del*E_K_t*(FF/(RR*TT)));
    g_IR_bar_t = G_K*(sqr(K_R_t)/(K_K+sqr(K_R_t)));
    y_t = 1{dimensionless}-pow(1{dimensionless}+K_S*(1{dimensionless}+sqr(K_R_t)/K_K)/(sqr(S_i)*exp(2{dimensionless}*(1{dimensionless}-del)*vT*FF/(RR*TT))), -1{dimensionless});
    g_IR_t = g_IR_bar_t*y_t;
    // <ci> H </ci>
    I_IR_t = eta_IR*g_IR_t*(J_K_t/50{milliM});
  enddef;

  def comp t_DR_channel as
    var alpha_n_t: per_millisecond;
    var alpha_n_bar: per_millisecond_per_millivolt {pub: in};
    var V_n: millivolt {pub: in};
    var K_alpha_n: millivolt {pub: in};
    var beta_n_t: per_millisecond;
    var beta_n_bar: per_millisecond {pub: in};
    var K_beta_n: millivolt {pub: in};
    var h_K_inf_t: dimensionless;
    var V_h_K_inf: millivolt {pub: in};
    var A_h_K_inf: millivolt {pub: in};
    var tau_h_K_t: millisecond;
    var n_t: dimensionless {init: 0.006883};
    var h_K_t: dimensionless {init: 0.996416};
    var g_DR_t: milliS_per_cm2;
    var g_K_bar: milliS_per_cm2 {pub: in};
    var I_DR_t: microA_per_cm2 {pub: out};
    var J_K_t: milliV_milliM {pub: in};
    var eta_DR: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var vT: millivolt {pub: in};
    alpha_n_t = alpha_n_bar*((vT-V_n)/(1{dimensionless}-exp(-((vT-V_n)/K_alpha_n))));
    beta_n_t = beta_n_bar*exp(-((vT-V_n)/K_beta_n));
    h_K_inf_t = 1{dimensionless}/(1{dimensionless}+exp((vT-V_h_K_inf)/A_h_K_inf));
    tau_h_K_t = 1{millisecond}*exp(-((vT+40{millivolt})/25.75{millivolt}));
    ode(n_t, time) = alpha_n_t*(1{dimensionless}-n_t)-beta_n_t*n_t;
    ode(h_K_t, time) = (h_K_inf_t-h_K_t)/tau_h_K_t;
    g_DR_t = g_K_bar*pow(n_t, 4{dimensionless})*h_K_t;
    I_DR_t = eta_DR*g_DR_t*(J_K_t/50{milliM});
  enddef;

  def comp t_Na_channel as
    var vT: millivolt {pub: in};
    var Na_i: milliM {pub: in};
    var Na_t: milliM {pub: in};
    var alpha_h_t: per_millisecond;
    var alpha_h_bar: per_millisecond {pub: in};
    var V_h: millivolt {pub: in};
    var K_alpha_h: millivolt {pub: in};
    var beta_h_t: per_millisecond;
    var beta_h_bar: per_millisecond {pub: in};
    var K_beta_h: millivolt {pub: in};
    var alpha_m_t: per_millisecond;
    var alpha_m_bar: per_millisecond_per_millivolt {pub: in};
    var V_m: millivolt {pub: in};
    var K_alpha_m: millivolt {pub: in};
    var beta_m_t: per_millisecond;
    var beta_m_bar: per_millisecond {pub: in};
    var K_beta_m: millivolt {pub: in};
    var S_inf_t: dimensionless;
    var V_S_inf: millivolt {pub: in};
    var A_S_inf: millivolt {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var tau_S_t: millisecond;
    var V_tau: millivolt {pub: in};
    var m_t: dimensionless {init: 0.027053};
    var h_t: dimensionless {init: 0.595856};
    var S_t: dimensionless {init: 0.586011};
    var g_Na_t: milliS_per_cm2;
    var g_Na_bar: milliS_per_cm2 {pub: in};
    var J_Na_t: milliV_milliM;
    var I_Na_t: microA_per_cm2 {pub: out};
    var eta_Na: dimensionless {pub: in};
    var time: millisecond {pub: in};
    alpha_h_t = alpha_h_bar*exp(-((vT-V_h)/K_alpha_h));
    beta_h_t = beta_h_bar/(1{dimensionless}+exp(-((vT-V_h)/K_beta_h)));
    alpha_m_t = alpha_m_bar*((vT-V_m)/(1{dimensionless}-exp(-((vT-V_m)/K_alpha_m))));
    beta_m_t = beta_m_bar*exp(-((vT-V_m)/K_beta_m));
    S_inf_t = 1{dimensionless}/(1{dimensionless}+exp((vT-V_S_inf)/A_S_inf));
    // factor of 1000 added on 25/6/07
    tau_S_t = 8571{millisecond}/(0.2{dimensionless}+5.65{dimensionless}*sqr((vT+V_tau)/100{millivolt}));
    J_Na_t = vT*((Na_i-Na_t*exp(-1{dimensionless}*FF*vT/(RR*TT)))/(1{dimensionless}-exp(-1{dimensionless}*FF*vT/(RR*TT))));
    ode(m_t, time) = alpha_m_t*(1{dimensionless}-m_t)-beta_m_t*m_t;
    ode(h_t, time) = alpha_h_t*(1{dimensionless}-h_t)-beta_h_t*h_t;
    ode(S_t, time) = (S_inf_t-S_t)/tau_S_t;
    g_Na_t = g_Na_bar*pow(m_t, 3{dimensionless})*h_t*S_t;
    I_Na_t = eta_Na*g_Na_t*(J_Na_t/75{milliM});
  enddef;

  def comp t_NaK_channel as
    var sig_t: dimensionless;
    var f1_t: dimensionless;
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var I_NaK_bar_t: microA_per_cm2;
    var K_m_K: milliM {pub: in};
    var K_m_Na: milliM {pub: in};
    var I_NaK_t: microA_per_cm2 {pub: out};
    var J_NaK_bar: micro_mol_per_cm2_per_second {pub: in};
    var K_t: milliM {pub: in};
    var Na_i: milliM {pub: in};
    var Na_t: milliM {pub: in};
    var eta_NaK: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var vT: millivolt {pub: in};
    sig_t = 1{dimensionless}/7{dimensionless}*(exp(Na_t/67.3{milliM})-1{dimensionless});
    f1_t = pow(1{dimensionless}+0.12{dimensionless}*exp(-0.1{dimensionless}*vT*(FF/(RR*TT)))+0.04{dimensionless}*sig_t*exp(-(vT*(FF/(RR*TT)))), -1{dimensionless});
    I_NaK_bar_t = FF*(J_NaK_bar/(sqr(1{dimensionless}+K_m_K/K_t)*pow(1{dimensionless}+K_m_Na/Na_i, 3{dimensionless})));
    I_NaK_t = eta_NaK*I_NaK_bar_t*f1_t;
  enddef;
  // Stern and Rios Component

  def comp sternrios as
    // these variables are defined here and used in other components
    var O_0: dimensionless {init: 0.000002, pub: out};
    var O_1: dimensionless {init: 0.000006, pub: out};
    var O_2: dimensionless {init: 0.000007, pub: out};
    var O_3: dimensionless {init: 0.000003, pub: out};
    var O_4: dimensionless {init: 0.000001, pub: out};
    // these variables are defined here and only used internally
    var k_L: per_millisecond {init: 0.002};
    var k_Lm: per_millisecond {init: 1000};
    var f: dimensionless {init: 0.2};
    var alpha1: per_millisecond {init: 0.2};
    var K: millivolt {init: 4.5};
    var Vbar: millivolt {init: -20};
    var C_0: dimensionless {init: 0.883113};
    var C_1: dimensionless {init: 0.111480};
    var C_2: dimensionless {init: 0.005277};
    var C_3: dimensionless {init: 0.000111};
    var C_4: dimensionless {init: 0.000001};
    var k_C: per_millisecond;
    var k_Cm: per_millisecond;
    // these variables are imported from other components
    var time: millisecond {pub: in};
    var vT: millivolt {pub: in};
    k_C = 0.5{dimensionless}*alpha1*exp((vT-Vbar)/(8{dimensionless}*K));
    k_Cm = 0.5{dimensionless}*alpha1*exp((Vbar-vT)/(8{dimensionless}*K));
    ode(C_0, time) = -k_L*C_0+k_Lm*O_0+(-4{dimensionless}*k_C*C_0)+k_Cm*C_1;
    ode(O_0, time) = k_L*C_0+(-k_Lm*O_0)+(-4{dimensionless}*k_C*O_0/f)+f*k_Cm*O_1;
    ode(C_1, time) = 4{dimensionless}*k_C*C_0+(-k_Cm*C_1)+(-k_L*C_1/f)+f*k_Lm*O_1+(-3{dimensionless}*k_C*C_1)+2{dimensionless}*k_Cm*C_2;
    ode(O_1, time) = k_L*C_1/f+(-k_Lm*f*O_1)+4{dimensionless}*k_C*O_0/f+(-f*k_Cm*O_1)+(-3{dimensionless}*k_C*O_1/f)+2{dimensionless}*f*k_Cm*O_2;
    ode(C_2, time) = 3{dimensionless}*k_C*C_1+(-2{dimensionless}*k_Cm*C_2)+(-k_L*C_2/sqr(f))+sqr(f)*k_Lm*O_2+(-2{dimensionless}*k_C*C_2)+3{dimensionless}*k_Cm*C_3;
    ode(O_2, time) = 3{dimensionless}*k_C*O_1/f+(-2{dimensionless}*f*k_Cm*O_2)+k_L*C_2/sqr(f)+(-k_Lm*sqr(f)*O_2)+(-2{dimensionless}*k_C*O_2/f)+3{dimensionless}*f*k_Cm*O_3;
    ode(C_3, time) = 2{dimensionless}*k_C*C_2+(-3{dimensionless}*k_Cm*C_3)+(-k_L*C_3/pow(f, 3{dimensionless}))+k_Lm*pow(f, 3{dimensionless})*O_3+(-k_C*C_3)+4{dimensionless}*k_Cm*C_4;
    ode(O_3, time) = k_L*C_3/pow(f, 3{dimensionless})+(-k_Lm*pow(f, 3{dimensionless})*O_3)+2{dimensionless}*k_C*O_2/f+(-3{dimensionless}*k_Cm*f*O_3)+(-k_C*O_3/f)+4{dimensionless}*f*k_Cm*O_4;
    ode(C_4, time) = k_C*C_3+(-4{dimensionless}*k_Cm*C_4)+(-k_L*C_4/pow(f, 4{dimensionless}))+k_Lm*pow(f, 4{dimensionless})*O_4;
    ode(O_4, time) = k_C*O_3/f+(-4{dimensionless}*f*k_Cm*O_4)+k_L*C_4/pow(f, 4{dimensionless})+(-k_Lm*pow(f, 4{dimensionless})*O_4);
  enddef;

  def comp razumova as
    // these variables are defined here and only used internally
    var nu_SR: micromolar_per_millisecond_micrometre3 {init: 2.4375};
    var K_SR: micromolar {init: 1};
    var L_e: micrometre3_per_millisecond {init: 0.00004};
    var tau_R: micrometre3_per_millisecond {init: 0.75};
    var tau_SR_R: micrometre3_per_millisecond {init: 0.75};
    var L_S_0: micrometre {init: 1.0};
    var L_S: micrometre {init: 1.0};
    var R_R: micrometre {init: 0.5};
    var V_o: micrometre3;
    var V_1: micrometre3;
    var V_2: micrometre3;
    var V_SR: micrometre3;
    var V_SR1: micrometre3;
    var V_SR2: micrometre3;
    var k_T_on: per_micromolar_per_millisecond {init: 0.0885};
    var k_T_off: per_millisecond {init: 0.115};
    var T_tot_0: micromolar {init: 140};
    var k_P_on: per_micromolar_per_millisecond {init: 0};
    var k_P_off: per_millisecond {init: 0};
    var P_tot: micromolar {init: 1500};
    var k_Mg_on: per_micromolar_per_millisecond {init: 0};
    var k_Mg_off: per_millisecond {init: 0};
    var k_Cs_on: per_micromolar_per_millisecond {init: 0.000004};
    var k_Cs_off: per_millisecond {init: 0.005};
    var Cs_tot: micromolar {init: 31000};
    var k_CATP_on: per_micromolar_per_millisecond {init: 0.15};
    var k_CATP_off: per_millisecond {init: 30};
    var k_MATP_on: per_micromolar_per_millisecond {init: 0.0015};
    var k_MATP_off: per_millisecond {init: 0.15};
    var tau_ATP: micrometre3_per_millisecond {init: 0.375};
    var tau_Mg: micrometre3_per_millisecond {init: 1.5};
    var k_0_on: per_millisecond {init: 0};
    var k_0_off: per_millisecond {init: 0.15};
    var k_Ca_on: per_millisecond {init: 0.15};
    var k_Ca_off: per_millisecond {init: 0.05};
    var f_o: per_millisecond {init: 0.5};
    // -->
    var f_p: per_millisecond {init: 5};
    var h_o: per_millisecond {init: 0.08};
    var h_p: per_millisecond {init: 0.06};
    var g_o: per_millisecond {init: 0.04};
    // -->
    var b_p: per_millisecond {init: 0.00000394};
    var k_p: micrometre3_per_millisecond {init: 0.00000362};
    var A_p: per_milliM3_per_millisecond {init: 1};
    var B_p: per_milliM2_per_millisecond {init: 0.0001};
    var PP: milliM2 {init: 6};
    var x_0: micrometre {init: 0.05};
    var x_1: micrometre {init: 0.000000};
    var x_2: micrometre {init: 0.050000};
    // tomo
    // <variable initial_value="0.000107" name="eta" units="newton_per_m3"/>
    // <variable name="stress" public_interface="out" units="newton_per_m2"/>
    // <variable initial_value="0.0" name="dummy" units="newton_millisecond_per_m2"/>
    // <variable initial_value="0.000163" name="zeta" units="micrometre"/>
    var eta: newton_per_m3 {init: 0.000107};
    var stress: newton_per_m2 {pub: out};
    var dummy: newton_millisecond_per_m2 {init: 0.0};
    // <variable initial_value="0.00725" name="zeta" units="micrometre"/>
    // <variable initial_value="0.0151" name="zeta" units="micrometre"/>
    var zeta: micrometre {init: 0.0021};
    // tomo end
    var T_0: micromolar;
    var Ca_1: micromolar {init: 0.884732, pub: out};
    var Ca_SR1: micromolar {init: 1580.867624};
    var Ca_2: micromolar {init: 0.399902};
    var Ca_SR2: micromolar {init: 1581.712973};
    var Ca_T_2: micromolar {init: 8.194027};
    var Ca_P1: micromolar {init: 615.000000};
    var Ca_P2: micromolar {init: 615.000000};
    var Mg_P1: micromolar {init: 811.000000};
    var Mg_P2: micromolar {init: 811.000000};
    var Ca_Cs1: micromolar {init: 17306.257267};
    var Ca_Cs2: micromolar {init: 17310.310128};
    var Ca_ATP1: micromolar {init: 2.244070};
    var Ca_ATP2: micromolar {init: 1.523121};
    var Mg_ATP1: micromolar {init: 7242.253138};
    var Mg_ATP2: micromolar {init: 7242.274705};
    var ATP1: micromolar {init: 755.502793};
    var ATP2: micromolar {init: 756.202174};
    var Mg1: micromolar {init: 957.730848};
    var Mg2: micromolar {init: 957.725457};
    var Ca_CaT2: micromolar {init: 1.347074};
    var D_0: micromolar {init: 0.343574};
    var D_1: micromolar {init: 0.554181};
    var D_2: micromolar {init: 1.342379};
    var A_1: micromolar {init: 0.133380};
    var A_2: micromolar {init: 0.106577};
    var P: milliM {init: 0.231949};
    var P_SR: milliM {init: 0.284897};
    var P_C_SR: milliM {init: 0.173921};
    var i2: micrometre3_per_millisecond {init: 60};
    // these variables are imported from other components
    var time: millisecond {pub: in};
    var O_0: dimensionless {pub: in};
    var O_1: dimensionless {pub: in};
    var O_2: dimensionless {pub: in};
    var O_3: dimensionless {pub: in};
    var O_4: dimensionless {pub: in};
    //
    // Sub (The Cannell Part)
    //
    // tomo
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="T_tot_Eqn"><eq/><ci>T_tot</ci><piecewise><piece><apply><times/><apply><plus/><apply><minus/><apply><plus/><apply><minus/><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micrometre4">0.073164682539683</cn><apply><power/><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>L_S</ci></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn></apply></apply><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micrometre3">0.702380952380952</cn><apply><power/><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>L_S</ci></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn></apply></apply></apply><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micrometre2">1.950644841269842</cn><apply><power/><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>L_S</ci></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn></apply></apply></apply><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micrometre">1.271666666666668</cn><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn><ci>L_S</ci></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micrometre">0.09857142857143</cn></apply><ci>T_tot_0</ci></apply><apply><and/><apply><geq/><ci>L_S</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micrometre">0.4</cn></apply><apply><lt/><ci>L_S</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micrometre">2</cn></apply></apply></piece><otherwise><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micromolar">0</cn></otherwise></piecewise></apply></math>
    //
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="T_tot_Eqn"><eq/><ci>T_tot</ci><piecewise><piece><apply><times/><apply><minus/><apply><plus/><apply><minus/><apply><plus/><apply><times/><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micrometre4">19.204389574759201</cn></apply><apply><power/><ci>L_S</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn></apply></apply><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micrometre3">92.181069958843494</cn><apply><power/><ci>L_S</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn></apply></apply></apply><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micrometre2">166.975308641966905</cn><apply><power/><ci>L_S</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn></apply></apply></apply><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micrometre">135.259259259252303</cn><ci>L_S</ci></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micrometre">40.333333333331304</cn></apply><ci>T_tot_0</ci></apply><apply><and/><apply><geq/><ci>L_S</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micrometre">0.75</cn></apply><apply><leq/><ci>L_S</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micrometre">1.65</cn></apply></apply></piece><otherwise><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micromolar">0</cn></otherwise></piecewise></apply></math>
    //
    //
    // tomo end
    // <apply><pi/>
    //
    //     </apply>
    V_o = 0.95{dimensionless}*L_S_0*pi*sqr(R_R);
    V_1 = 0.01{dimensionless}*V_o;
    V_2 = 0.99{dimensionless}*V_o;
    // <apply><pi/>
    //
    //     </apply>
    V_SR = 0.05{dimensionless}*L_S_0*pi*sqr(R_R);
    V_SR1 = 0.01{dimensionless}*V_SR;
    V_SR2 = 0.99{dimensionless}*V_SR;
    // T_tot
    T_0 = sel
      case T_tot_0+(-Ca_T_2)+(-Ca_CaT2)+(-D_0)+(-D_1)+(-D_2)+(-A_1)+(-A_2) > 0{micromolar}:
        T_tot_0+(-Ca_T_2)+(-Ca_CaT2)+(-D_0)+(-D_1)+(-D_2)+(-A_1)+(-A_2);
      otherwise:
        0{micromolar};
    endsel;
    // T_tot_0
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="T_0_Eqn"><eq/><ci>T_0</ci><piecewise><piece><apply><plus/><ci>T_tot_0</ci><apply><minus/><ci>Ca_T_2</ci></apply><apply><minus/><ci>Ca_CaT2</ci></apply><apply><minus/><ci>D_0</ci></apply><apply><minus/><ci>D_1</ci></apply><apply><minus/><ci>D_2</ci></apply><apply><minus/><ci>A_1</ci></apply><apply><minus/><ci>A_2</ci></apply></apply><apply><gt/><apply><plus/><ci>T_tot_0</ci><apply><minus/><ci>Ca_T_2</ci></apply><apply><minus/><ci>Ca_CaT2</ci></apply><apply><minus/><ci>D_0</ci></apply><apply><minus/><ci>D_1</ci></apply><apply><minus/><ci>D_2</ci></apply><apply><minus/><ci>A_1</ci></apply><apply><minus/><ci>A_2</ci></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micromolar">0</cn></apply></piece><otherwise><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micromolar">0</cn></otherwise></piecewise></apply></math>
    // Sub (The Razumova Part)
    ode(Ca_1, time) = i2*(O_0+O_1+O_2+O_3+O_4)*((Ca_SR1-Ca_1)/V_1)-nu_SR*(Ca_1/(Ca_1+K_SR)/V_1)+L_e*((Ca_SR1-Ca_1)/V_1)+(-tau_R*((Ca_1-Ca_2)/V_1))+(-(k_P_on*Ca_1*(P_tot+(-Ca_P1)+(-Mg_P1))+(-k_P_off*Ca_P1)))+(-(k_CATP_on*Ca_1*ATP1+(-k_CATP_off*Ca_ATP1)));
    ode(Ca_SR1, time) = -(i2*(O_0+O_1+O_2+O_3+O_4))*((Ca_SR1-Ca_1)/V_SR1)+nu_SR*(Ca_1/(Ca_1+K_SR)/V_SR1)+(-L_e*((Ca_SR1-Ca_1)/V_SR1))+(-tau_SR_R*((Ca_SR1-Ca_SR2)/V_SR1))+(-(k_Cs_on*Ca_SR1*(Cs_tot-Ca_Cs1)+(-k_Cs_off*Ca_Cs1)));
    ode(Ca_2, time) = -nu_SR*(Ca_2/(Ca_2+K_SR)/V_2)+L_e*((Ca_SR2+(-Ca_2))/V_2)+tau_R*((Ca_1-Ca_2)/V_2)+(-(k_T_on*Ca_2*T_0+(-k_T_off*Ca_T_2)+k_T_on*Ca_2*Ca_T_2+(-k_T_off*Ca_CaT2)+k_T_on*Ca_2*D_0+(-k_T_off*D_1)+k_T_on*Ca_2*D_1+(-k_T_off*D_2)))+(-(k_P_on*Ca_2*(P_tot+(-Ca_P2)+(-Mg_P2))+(-k_P_off*Ca_P2)))+(-(k_CATP_on*Ca_2*ATP2+(-k_CATP_off*Ca_ATP2)));
    // with factor to get units correct
    ode(Ca_SR2, time) = nu_SR*(Ca_2/(Ca_2+K_SR)/V_SR2)+(-L_e*((Ca_SR2+(-Ca_2))/V_SR2))+tau_SR_R*((Ca_SR1+(-Ca_SR2))/V_SR2)+(-(k_Cs_on*Ca_SR2*(Cs_tot+(-Ca_Cs2))+(-k_Cs_off*Ca_Cs2)))-1000{milliM}/1{M}*(A_p*(P_SR*(0.001{M}/1{milliM})*Ca_SR2-PP)*sel(case P_SR*(0.001{M}/1{milliM})*Ca_SR2-PP > 0{milliM2}: 1{dimensionless}, otherwise: 0{dimensionless})*(0.001{M}/1{milliM})*P_SR*Ca_SR2-B_p*P_C_SR*(PP-P_SR*(0.001{M}/1{milliM})*Ca_SR2)*sel(case PP-P_SR*(0.001{M}/1{milliM})*Ca_SR2 > 0{milliM2}: 1{dimensionless}, otherwise: 0{dimensionless}));
    ode(Ca_T_2, time) = k_T_on*Ca_2*T_0+(-k_T_off*Ca_T_2)+(-k_T_on*Ca_2*Ca_T_2)+k_T_off*Ca_CaT2+(-k_0_on*Ca_T_2)+k_0_off*D_1;
    ode(Ca_P1, time) = k_P_on*Ca_1*(P_tot+(-Ca_P1)+(-Mg_P1))+(-k_P_off*Ca_P1);
    ode(Ca_P2, time) = k_P_on*Ca_2*(P_tot+(-Ca_P2)+(-Mg_P2))+(-k_P_off*Ca_P2);
    ode(Mg_P1, time) = k_Mg_on*(P_tot+(-Ca_P1)+(-Mg_P1))*Mg1+(-k_Mg_off*Mg_P1);
    ode(Mg_P2, time) = k_Mg_on*(P_tot+(-Ca_P2)+(-Mg_P2))*Mg2+(-k_Mg_off*Mg_P2);
    ode(Ca_Cs1, time) = k_Cs_on*Ca_SR1*(Cs_tot+(-Ca_Cs1))+(-k_Cs_off*Ca_Cs1);
    ode(Ca_Cs2, time) = k_Cs_on*Ca_SR2*(Cs_tot+(-Ca_Cs2))+(-k_Cs_off*Ca_Cs2);
    ode(Ca_ATP1, time) = k_CATP_on*Ca_1*ATP1+(-k_CATP_off*Ca_ATP1)+(-tau_ATP*((Ca_ATP1+(-Ca_ATP2))/V_1));
    ode(Ca_ATP2, time) = k_CATP_on*Ca_2*ATP2+(-k_CATP_off*Ca_ATP2)+tau_ATP*((Ca_ATP1+(-Ca_ATP2))/V_2);
    ode(Mg_ATP1, time) = k_MATP_on*Mg1*ATP1+(-k_MATP_off*Mg_ATP1)+(-tau_ATP*((Mg_ATP1+(-Mg_ATP2))/V_1));
    ode(Mg_ATP2, time) = k_MATP_on*Mg2*ATP2+(-k_MATP_off*Mg_ATP2)+tau_ATP*((Mg_ATP1+(-Mg_ATP2))/V_2);
    ode(ATP1, time) = -(k_CATP_on*Ca_1*ATP1+(-k_CATP_off*Ca_ATP1))+(-(k_MATP_on*Mg1*ATP1+(-k_MATP_off*Mg_ATP1)))+(-tau_ATP*((ATP1+(-ATP2))/V_1));
    ode(ATP2, time) = -(k_CATP_on*Ca_2*ATP2+(-k_CATP_off*Ca_ATP2))+(-(k_MATP_on*Mg2*ATP2+(-k_MATP_off*Mg_ATP2)))+tau_ATP*((ATP1+(-ATP2))/V_2);
    ode(Mg1, time) = -(k_Mg_on*(P_tot+(-Ca_P1)+(-Mg_P1))*Mg1+(-k_Mg_off*Mg_P1))+(-(k_MATP_on*Mg1*ATP1+(-k_MATP_off*Mg_ATP1)))+(-tau_Mg*((Mg1+(-Mg2))/V_1));
    ode(Mg2, time) = -(k_Mg_on*(P_tot+(-Ca_P2)+(-Mg_P2))*Mg2+(-k_Mg_off*Mg_P2))+(-(k_MATP_on*Mg2*ATP2+(-k_MATP_off*Mg_ATP2)))+tau_Mg*((Mg1+(-Mg2))/V_2);
    ode(Ca_CaT2, time) = k_T_on*Ca_2*Ca_T_2+(-k_T_off*Ca_CaT2)+(-k_Ca_on*Ca_CaT2)+k_Ca_off*D_2;
    ode(D_0, time) = -k_T_on*Ca_2*D_0+k_T_off*D_1+k_0_on*T_0+(-k_0_off*D_0);
    ode(D_1, time) = k_T_on*Ca_2*D_0+(-k_T_off*D_1)+k_0_on*Ca_T_2+(-k_0_off*D_1)+(-k_T_on*Ca_2*D_1)+k_T_off*D_2;
    //
    // tomo
    //
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="f_o_Eqn"><eq/><ci>f_o</ci><apply><times/><ci>f_ast</ci><apply><power/><apply><plus/><cn>1</cn><apply><times/><apply><divide/><ci>A_1</ci><ci>T_tot_0</ci></apply><apply><minus/><apply><exp/><apply><times/><apply><divide/><ci>x_1</ci><ci>x_0</ci></apply><apply><minus/><ci>nu</ci><cn>1</cn></apply></apply></apply><cn>1</cn></apply></apply><apply><times/><apply><divide/><ci>A_2</ci><ci>T_tot_0</ci></apply><apply><minus/><apply><exp/><apply><times/><apply><divide/><ci>x_2</ci><ci>x_0</ci></apply><apply><minus/><ci>nu</ci><cn>1</cn></apply></apply></apply><cn>1</cn></apply></apply></apply><cn>2</cn></apply></apply></apply></math>
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="sigma_g_Eqn"><eq/><ci>sigma_g</ci><piecewise><piece><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">8</cn><apply><gt/><ci>x_2</ci><ci>x_0</ci></apply></piece><otherwise><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn></otherwise></piecewise></apply></math>
    //
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="g_o_Eqn"><eq/><ci>g_o</ci><apply><times/><ci>g_ast</ci><apply><exp/><apply><times/><ci>sigma_g</ci><apply><power/><apply><minus/><ci>x_2</ci><ci>x_0</ci></apply><cn>2</cn></apply></apply></apply></apply></apply></math>
    //
    // tomo end
    ode(D_2, time) = k_T_on*Ca_2*D_1+(-k_T_off*D_2)+k_Ca_on*Ca_CaT2+(-k_Ca_off*D_2)+(-f_o*D_2)+f_p*A_1+g_o*A_2;
    ode(A_1, time) = f_o*D_2+(-f_p*A_1)+h_p*A_2+(-h_o*A_1);
    ode(A_2, time) = -h_p*A_2+h_o*A_1+(-g_o*A_2);
    ode(P, time) = 0.001{M}/1{milliM}*(h_o*A_1-h_p*A_2)+(-1{dimensionless}*b_p*P)+(-1{dimensionless}*k_p*((P-P_SR)/V_2));
    // to get units correct
    ode(P_SR, time) = k_p*((P-P_SR)/V_SR2)-1{dimensionless}*(A_p*(P_SR*(0.001{M}/1{milliM})*Ca_SR2-PP)*sel(case P_SR*(0.001{M}/1{milliM})*Ca_SR2-PP > 0{milliM2}: 1{dimensionless}, otherwise: 0{dimensionless})*(0.001{M}/1{milliM})*P_SR*Ca_SR2-B_p*P_C_SR*(PP-P_SR*(0.001{M}/1{milliM})*Ca_SR2)*sel(case PP-P_SR*(0.001{M}/1{milliM})*Ca_SR2 > 0{milliM2}: 1{dimensionless}, otherwise: 0{dimensionless}));
    // to get units correct
    ode(P_C_SR, time) = 1{dimensionless}*(A_p*(P_SR*(0.001{M}/1{milliM})*Ca_SR2-PP)*sel(case P_SR*(0.001{M}/1{milliM})*Ca_SR2-PP > 0{milliM2}: 1{dimensionless}, otherwise: 0{dimensionless})*(0.001{M}/1{milliM})*P_SR*Ca_SR2-B_p*P_C_SR*(PP-P_SR*(0.001{M}/1{milliM})*Ca_SR2)*sel(case PP-P_SR*(0.001{M}/1{milliM})*Ca_SR2 > 0{milliM2}: 1{dimensionless}, otherwise: 0{dimensionless}));
    // tomo
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="rel_velo_Eqn"><eq/><ci>rel_velo</ci><piecewise><piece><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.1</cn></apply><apply><and/><apply><geq/><ci>time</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">500</cn></apply><apply><lt/><ci>time</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">1000</cn></apply></apply></piece><otherwise><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0</cn></otherwise></piecewise></apply></math>
    //
    //
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="velo_Eqn"><eq/><ci>velo</ci><apply><times/><ci>rel_velo</ci><ci>velo_max</ci></apply></apply></math>
    //
    //
    //
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="dL_S_Eqn"><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>L_S</ci></apply><ci>velo</ci></apply></math>
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="dx_1_Eqn"><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>x_1</ci></apply><apply><minus/><apply><plus/><apply><times/><apply><minus/><apply><plus/><apply><divide/><apply><times/><ci>f_o</ci><ci>D_2</ci></apply><ci>A_1</ci></apply><apply><divide/><apply><times/><ci>h_p</ci><ci>A_2</ci></apply><ci>A_1</ci></apply></apply></apply><ci>x_1</ci></apply><apply><times/><ci>h_p</ci><apply><divide/><ci>A_2</ci><ci>A_1</ci></apply><apply><minus/><ci>x_2</ci><ci>x_0</ci></apply></apply></apply><apply><divide/><ci>velo</ci><cn>2</cn></apply></apply></apply></math>
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="dx_1_Eqn"><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>x_1</ci></apply><apply><plus/><apply><times/><apply><minus/><apply><plus/><apply><divide/><apply><times/><ci>f_o</ci><ci>D_2</ci></apply><ci>A_1</ci></apply><apply><divide/><apply><times/><ci>h_p</ci><ci>A_2</ci></apply><ci>A_1</ci></apply></apply></apply><ci>x_1</ci></apply><apply><times/><ci>h_p</ci><apply><divide/><ci>A_2</ci><ci>A_1</ci></apply><apply><minus/><ci>x_2</ci><ci>x_0</ci></apply></apply><apply><divide/><ci>velo</ci><cn>2</cn></apply></apply></apply></math>
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="dx_2_Eqn"><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>x_2</ci></apply><apply><minus/><apply><times/><apply><minus/><apply><divide/><apply><times/><ci>h_o</ci><ci>A_1</ci></apply><ci>A_2</ci></apply></apply><apply><minus/><ci>x_2</ci><apply><plus/><ci>x_1</ci><ci>x_0</ci></apply></apply></apply><apply><divide/><ci>velo</ci><cn>2</cn></apply></apply></apply></math>
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="dx_2_Eqn"><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>x_2</ci></apply><apply><plus/><apply><times/><apply><minus/><apply><divide/><apply><times/><ci>h_o</ci><ci>A_1</ci></apply><ci>A_2</ci></apply></apply><apply><minus/><ci>x_2</ci><apply><plus/><ci>x_1</ci><ci>x_0</ci></apply></apply></apply><ci>velo</ci></apply></apply></math>
    //
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="stress_Eqn"><eq/><ci>stress</ci><apply><divide/><apply><times/><apply><divide/><apply><minus/><apply><plus/><apply><times/><apply><divide/><ci>A_1</ci><ci>T_tot_0</ci></apply><ci>x_1</ci></apply><apply><times/><apply><divide/><ci>A_2</ci><ci>T_tot_0</ci></apply><ci>x_2</ci></apply></apply><ci>eta</ci></apply><ci>zeta</ci></apply><ci>T_tot</ci></apply><ci>T_tot_0</ci></apply></apply></math>
    //
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="dummy_Eqn"><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>dummy</ci></apply><ci>stress</ci></apply></math>
    //
    //
    // tomo end
    // <math xmlns="http://www.w3.org/1998/Math/MathML"><apply id="stress_Eqn"><eq/><ci>stress</ci><apply><divide/><apply><minus/><apply><plus/><apply><times/><apply><divide/><ci>A_1</ci><ci>T_tot_0</ci></apply><ci>x_1</ci></apply><apply><times/><apply><divide/><ci>A_2</ci><ci>T_tot_0</ci></apply><ci>x_2</ci></apply></apply><ci>eta</ci></apply><ci>zeta</ci></apply></apply></math>
    stress = (A_1/T_tot_0*x_1+A_2/T_tot_0*x_2-eta)/zeta*sel(case (L_S >= 0.635{micrometre}) and (L_S <= 0.85{micrometre}): 0.7/(0.85-0.635)*(L_S-0.635), case (L_S > 0.85{micrometre}) and (L_S <= 1.17{micrometre}): 0.7+0.3/(1.17-0.85)*(L_S-0.85), case (L_S > 1.17{micrometre}) and (L_S <= 1.255{micrometre}): 1, case (L_S > 1.255{micrometre}) and (L_S <= 1.97{micrometre}): 1-1/(1.97-1.255)*(L_S-1.255), otherwise: 0{micromolar});
    ode(dummy, time) = stress;
  enddef;

  def group as containment for
    comp cell incl
      comp wal_environment;
      comp sternrios;
      comp razumova;
    endcomp;
  enddef;

  def group as encapsulation for
    comp wal_environment incl
      comp sarco_Cl_channel;
      comp sarco_IR_channel;
      comp sarco_DR_channel;
      comp sarco_Na_channel;
      comp sarco_NaK_channel;
      comp t_Cl_channel;
      comp t_IR_channel;
      comp t_DR_channel;
      comp t_Na_channel;
      comp t_NaK_channel;
      comp razumova;
    endcomp;
  enddef;
  def map between cell and wal_environment for
    vars time and time;
  enddef;
  def map between wal_environment and sarco_Cl_channel for
    vars vS and vS;
    vars Cl_i and Cl_i;
    vars Cl_o and Cl_o;
    vars V_a and V_a;
    vars A_a and A_a;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars g_Cl_bar and g_Cl_bar;
    vars I_Cl and I_Cl;
  enddef;
  def map between wal_environment and sarco_IR_channel for
    vars vS and vS;
    vars E_K and E_K;
    vars K_e and K_e;
    vars J_K and J_K;
    vars del and del;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars G_K and G_K;
    vars K_K and K_K;
    vars K_S and K_S;
    vars S_i and S_i;
    vars I_IR and I_IR;
  enddef;
  def map between wal_environment and sarco_DR_channel for
    vars vS and vS;
    vars J_K and J_K;
    vars alpha_n_bar and alpha_n_bar;
    vars V_n and V_n;
    vars K_alpha_n and K_alpha_n;
    vars beta_n_bar and beta_n_bar;
    vars K_beta_n and K_beta_n;
    vars V_h_K_inf and V_h_K_inf;
    vars A_h_K_inf and A_h_K_inf;
    vars time and time;
    vars g_K_bar and g_K_bar;
    vars I_DR and I_DR;
  enddef;
  def map between wal_environment and sarco_Na_channel for
    vars vS and vS;
    vars Na_i and Na_i;
    vars Na_e and Na_e;
    vars alpha_h_bar and alpha_h_bar;
    vars V_h and V_h;
    vars K_alpha_h and K_alpha_h;
    vars beta_h_bar and beta_h_bar;
    vars K_beta_h and K_beta_h;
    vars alpha_m_bar and alpha_m_bar;
    vars V_m and V_m;
    vars K_alpha_m and K_alpha_m;
    vars beta_m_bar and beta_m_bar;
    vars K_beta_m and K_beta_m;
    vars V_S_inf and V_S_inf;
    vars A_S_inf and A_S_inf;
    vars V_tau and V_tau;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars g_Na_bar and g_Na_bar;
    vars I_Na and I_Na;
  enddef;
  def map between wal_environment and sarco_NaK_channel for
    vars vS and vS;
    vars Na_i and Na_i;
    vars Na_e and Na_e;
    vars K_e and K_e;
    vars K_m_K and K_m_K;
    vars K_m_Na and K_m_Na;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars J_NaK_bar and J_NaK_bar;
    vars I_NaK and I_NaK;
  enddef;
  def map between wal_environment and t_Cl_channel for
    vars vT and vT;
    vars Cl_i_t and Cl_i_t;
    vars Cl_o_t and Cl_o_t;
    vars V_a and V_a;
    vars A_a and A_a;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars g_Cl_bar and g_Cl_bar;
    vars I_Cl_t and I_Cl_t;
    vars eta_Cl and eta_Cl;
  enddef;
  def map between wal_environment and t_IR_channel for
    vars vT and vT;
    vars E_K_t and E_K_t;
    vars K_t and K_t;
    vars J_K_t and J_K_t;
    vars del and del;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars G_K and G_K;
    vars K_K and K_K;
    vars K_S and K_S;
    vars S_i and S_i;
    vars I_IR_t and I_IR_t;
    vars eta_IR and eta_IR;
  enddef;
  def map between wal_environment and t_DR_channel for
    vars vT and vT;
    vars J_K_t and J_K_t;
    vars alpha_n_bar and alpha_n_bar;
    vars V_n and V_n;
    vars K_alpha_n and K_alpha_n;
    vars beta_n_bar and beta_n_bar;
    vars K_beta_n and K_beta_n;
    vars V_h_K_inf and V_h_K_inf;
    vars A_h_K_inf and A_h_K_inf;
    vars time and time;
    vars g_K_bar and g_K_bar;
    vars I_DR_t and I_DR_t;
    vars eta_DR and eta_DR;
  enddef;
  def map between wal_environment and t_Na_channel for
    vars vT and vT;
    vars Na_i and Na_i;
    vars Na_t and Na_t;
    vars alpha_h_bar and alpha_h_bar;
    vars V_h and V_h;
    vars K_alpha_h and K_alpha_h;
    vars beta_h_bar and beta_h_bar;
    vars K_beta_h and K_beta_h;
    vars alpha_m_bar and alpha_m_bar;
    vars V_m and V_m;
    vars K_alpha_m and K_alpha_m;
    vars beta_m_bar and beta_m_bar;
    vars K_beta_m and K_beta_m;
    vars V_S_inf and V_S_inf;
    vars A_S_inf and A_S_inf;
    vars V_tau and V_tau;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars g_Na_bar and g_Na_bar;
    vars I_Na_t and I_Na_t;
    vars eta_Na and eta_Na;
  enddef;
  def map between wal_environment and t_NaK_channel for
    vars vT and vT;
    vars Na_i and Na_i;
    vars Na_t and Na_t;
    vars K_t and K_t;
    vars K_m_K and K_m_K;
    vars K_m_Na and K_m_Na;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars J_NaK_bar and J_NaK_bar;
    vars I_NaK_t and I_NaK_t;
    vars eta_NaK and eta_NaK;
  enddef;
  def map between cell and sternrios for
    vars time and time;
  enddef;
  def map between wal_environment and sternrios for
    vars vT and vT;
  enddef;
  def map between cell and razumova for
    vars time and time;
  enddef;
  def map between sternrios and razumova for
    vars O_0 and O_0;
    vars O_1 and O_1;
    vars O_2 and O_2;
    vars O_3 and O_3;
    vars O_4 and O_4;
  enddef;
  // </model>
  def unit meter_liter_per_micromol as
    unit meter;
    unit micromolar {expo: -1};
  enddef;
  def unit newton_per_meter as
    unit newton;
    unit meter {expo: -1};
  enddef;
enddef;
